PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = PRP Memory Experiment 
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
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    TextComponent TextWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Memory Experiment

        [Press the space bar to continue.]
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Instructions
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    TextComponent textInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        [Experiment Start]
        [Please read the instructions carefully]

        A series of words will appear, each word lasting for a short viewing time. Try to remember each word that is presented to you. You do not need to press any key.

        [Press the space bar to continue.]
    KeyboardComponent keyInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StudyTrials
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    TextComponent textStudyTrial
      color = White
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $WordItem
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  Routine BlanksScreen
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    TextComponent textBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine WaitScreen
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    TextComponent textWaitScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = [Press the space bar to continue.]
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    KeyboardComponent keyWaitScreen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Y_NScreen
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    TextComponent textY_NScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The following words are testing your recall.

        Press 'Y' if you saw the word on the screen in the previous list.

        Press 'N' if you have NOT seen the word on the previous list.

        [Press the space bar when you are ready to start.]
    KeyboardComponent key_Y_NScreen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestTrials
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    TextComponent textTestTrials
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordItem
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    KeyboardComponent memory_test_key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndScreen
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    TextComponent textEndScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Thank you for your participation in this study.
        [Please press the space bar to exit. ]
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LSQInstructions
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    TextComponent TestInstruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For the following part of the experiment, you will be asked to answer a series of questions.

        Please evaluate your answer on a scale of 1 (never) to 4 (often) and press the corresponding keys.


        [Please press "space" when ready to start.]
    KeyboardComponent TestInstructionKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LonlinessScaleQuestions
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    TextComponent LonlinessScaleQuestionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Questions
    KeyboardComponent LonlinessQuestionsKeyResp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consnet
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Consent Form.

        You will be taking part in the experiment conducted by the Peer Research Project team at Mcgill Chinese Psychology Student Association. Please be advised that no part of this experiment is going to be published or distributed. Thank you for considering participating in this experiment.

        The collection of the data for this research is used for educational purposes only.

        [Press the space bar to continue.]
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine consent_2
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The experiment is going to study how personality is connected to long-term memory. You will be asked to answer a series of multiple-choice survey questions and perform a computer task using keyboard and mouse.


        Risks. This study involves no greater than minimal risk: you may become uncomfortable or tired from long sitting in front of a computer.  This study may involve risks that are unknown at this time.

        [Press the space bar to continue.]
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine consent_3
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Benefit. You gain no direct benefits from participating. However, the researchers hope to learn how memory affects daily life.

        Withdrawal from the Study: You can stop participating in the study at any time, for any reason, if you so decide. You can do so by pressing 'ESC' key, and the study will be terminated.

        [Press the space bar to continue.]
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine consent_4
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Alternatives. Participation is voluntary and the only alternative is to not participate.

        Confidentiality:
        All information you supply during the research will be held in confidence and your name will not appear in any report or publication or during data analysis performed by the research team.

        If you consent to participate in this research, please type "Y" to continue to experiment.

        If you do not consent to participate in the experiment, please type ESC (escape) key to terminate the experiment.
    KeyboardComponent key_resp_6
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine debrief
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    ImageComponent image
      image = Debrief.png
      size = (1, 0.6)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press space bar to continue. 
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine math
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $MathProblem
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    KeyboardComponent math_key_resp
      allowedKeys = 't','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_exp
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = [Please press the space bar to see the debrief form and contact information]. 
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine math_instruction
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will see two math questions next.
        For each question, please press the key corresponding with the correct answer.

        [Please press space bar when you are ready to start.]
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine consnet
  Routine consent_2
  Routine consent_3
  Routine consent_4
  Routine BlanksScreen
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = PRP Study Trial Word List.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem': 'Cabin'},
      {'WordItem': 'Pipe'},
      {'WordItem': 'Elephant'},
      {'WordItem': 'Chest'},
      {'WordItem': 'Silk'},
      {'WordItem': 'Theater'},
      {'WordItem': 'Watch'},
      {'WordItem': 'Whip'},
      {'WordItem': 'Pillow'},
      {'WordItem': 'Giant'}]
    Routine StudyTrials
    Routine BlanksScreen
  LoopTerminator trials
  Routine math_instruction
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = MathProblemDatasheetPRPPsychopy.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'MathProblem': 'Please answer the following question:\n\n2+3=?\n\n1) 3\n2) 5\n3) 6\n4) 4'},
      {'MathProblem': 'Please answer the following question:\n\n7-4=?\n\n1) 2\n2) 4\n3) 5\n4) 3'}]
    Routine math
    Routine BlanksScreen
  LoopTerminator trials_4
  Routine WaitScreen
  Routine BlanksScreen
  Routine Y_NScreen
  Routine BlanksScreen
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = PRP Study Trial Word List.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem': 'Stress'},
      {'WordItem': 'Anxiety'},
      {'WordItem': 'Depression'},
      {'WordItem': 'Excited'},
      {'WordItem': 'Joyous'},
      {'WordItem': 'Content'},
      {'WordItem': 'Jealous'},
      {'WordItem': 'Fascinated'},
      {'WordItem': 'Ashamed'},
      {'WordItem': 'Aggravated'},
      {'WordItem': 'Calm'},
      {'WordItem': 'Delighted'}]
    Routine TestTrials
    Routine BlanksScreen
  LoopTerminator trials_2
  Routine LSQInstructions
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = LonlinessScaleQuestionairePsychopy4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Questions': 'How often do you feel that you are "in tune" with the people around  you?\n\n \n1-Never 2-Rarely  3-Sometimes 4-Often                                                                                                   '},
      {'Questions': 'How often do you feel that there is no one you can turn\n\n\n 1-Never 2-Rarely  3-Sometimes 4-Often                       '},
      {'Questions': 'How often do you feel alone?\n\n\n1-Never 2-Rarely  3-Sometimes 4-Often'},
      {'Questions': 'How often do you feel part of a group of friends?\n\n\n1-Never 2-Rarely  3-Sometimes 4-Often'},
      {'Questions': 'How often do you feel that you lack companionship?\n\n\n\n1-Never 2-Rarely  3-Sometimes 4-Often'},
      {'Questions': 'How often do you feel that you have a lot in common with the 1 people around you?\n\n\n\n1-Never 2-Rarely  3-Sometimes 4-Often'},
      {'Questions': 'How often do you feel that you are no longer close to anyone?\n\n\n\n1-Never 2-Rarely  3-Sometimes 4-Often'},
      {'Questions': 'How often do you feel that your interests and ideas are not shared 1 by those around you?\n\n\n\n1-Never 2-Rarely  3-Sometimes 4-Often'},
      {'Questions': 'How often do you feel outgoing and friendly?\n\n\n\n1-Never 2-Rarely  3-Sometimes 4-Often'},
      {'Questions': 'How often do you feel close to people?\n\n\n\n1-Never 2-Rarely  3-Sometimes 4-Often'},
      {'Questions': 'How often do you feel left out?\n\n\n\n1-Never 2-Rarely  3-Sometimes 4-Often'}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
    Routine BlanksScreen
    Routine LonlinessScaleQuestions
  LoopTerminator trials_3
  Routine end_exp
  Routine debrief
  Routine EndScreen
